<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>0</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState />
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
        <Left>-180</Left>
        <Right>180</Right>
        <Bottom>-90</Bottom>
        <Top>90</Top>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.SphereMapping.bonsai">
        <FaceSize xsi:nil="true" />
        <ClearColor>Gray</ClearColor>
        <Width xsi:nil="true" />
        <Height xsi:nil="true" />
        <RotationZ>0</RotationZ>
        <RotationY>0</RotationY>
        <RotationX>0</RotationX>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
          <ClearColor>Gray</ClearColor>
          <GammaLut xsi:nil="true" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Timer">
          <gl:DueTime>PT2S</gl:DueTime>
          <gl:Period>PT3S</gl:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Stimuli</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Permutation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasGoAudioFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>GoAudio</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:PlaySource" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GOAUDIO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasNoGoAudioFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>NoGoAudio</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>NoGoAudioTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="al:PlaySource" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGOAUDIO</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasGoGratingFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>GoGratings</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>GoGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>GoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>GOGRATINGS</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>HasNoGoGratingFlag</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="StringProperty">
                      <Value>NoGoGratings</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>NoGoGratingsTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT2S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>false</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Lick</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TimedGate">
                      <rx:TimeSpan>PT0.1S</rx:TimeSpan>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="BooleanProperty">
                      <Value>true</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Amb" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Throttle">
                      <rx:DueTime>PT2S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>WaterReward</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="rx:Sink">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Item2</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:BindTexture">
                            <gl:TextureSlot>Texture0</gl:TextureSlot>
                            <gl:ShaderName>Image</gl:ShaderName>
                            <gl:TextureTarget>Texture2D</gl:TextureTarget>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <SpatialFrequency>10</SpatialFrequency>
                    <TemporalFrequency>0</TemporalFrequency>
                    <Phase>0</Phase>
                    <SquareWave>false</SquareWave>
                    <Contrast>1</Contrast>
                    <DutyCycle xsi:nil="true" />
                    <Radius>1</Radius>
                    <Aperture>0</Aperture>
                    <Opacity>1</Opacity>
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>NoGoPresented</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>NOGOGRATINGS</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="20" Label="Source2" />
                  <Edge From="1" To="15" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="7" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="23" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="14" To="15" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Random</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="10" Label="Source1" />
            <Edge From="5" To="12" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="14" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="14" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source3" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source4" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>results.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>None</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Lick</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>lick_times.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="BooleanProperty">
          <Value>true</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>drawTime.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>true</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>true</io:IncludeHeader>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Path" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\audio</io:Path>
          <io:SearchPattern>*.wav</io:SearchPattern>
          <io:SearchOption>AllDirectories</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsNoGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LoadAudio</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:BufferLength>10</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GOGRATINGS</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NOGOGRATINGS</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GOAUDIO</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NOGOAUDIO</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LoadAudio</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:BufferLength>10</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>LoadAudio</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioReader">
                <al:BufferLength>10</al:BufferLength>
                <al:SampleRate>0</al:SampleRate>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>GOGRATINGS</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsNoGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>NOGOGRATINGS</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:EnumerateFiles">
          <io:Path>stimuli\gratings</io:Path>
          <io:SearchPattern>*.csv</io:SearchPattern>
          <io:SearchOption>AllDirectories</io:SearchOption>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadGratingsCsv</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:ListSeparator>,</io:ListSeparator>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
double.Parse(it[0]) * Math.PI / 180 as Orientation,
double.Parse(it[1]) as Speed,
double.Parse(it[2]) as Contrast,
double.Parse(it[3]) as Duration,
double.Parse(it[4]) as Angle
)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>IsNoGoStim</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>GoFilename</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="NotEqual">
              <Operand xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadGratingsCsv</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:ListSeparator>,</io:ListSeparator>
              <io:SkipRows>0</io:SkipRows>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
double.Parse(it[0]) * Math.PI / 180 as Orientation,
double.Parse(it[1]) as Speed,
double.Parse(it[2]) as Contrast,
double.Parse(it[3]) as Duration,
double.Parse(it[4]) as Angle
)</scr:Expression>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="rx:ReplaySubject">
        <Name>Stimuli</Name>
        <rx:BufferSize xsi:nil="true" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>GoFilename</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="23" To="42" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="24" To="32" Label="Source1" />
      <Edge From="24" To="35" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="31" Label="Source1" />
      <Edge From="27" To="45" Label="Source2" />
      <Edge From="28" To="48" Label="Source2" />
      <Edge From="29" To="34" Label="Source2" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="49" Label="Source3" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="49" Label="Source4" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="35" To="39" Label="Source1" />
      <Edge From="36" To="38" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="39" To="41" Label="Source1" />
      <Edge From="40" To="41" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="42" To="46" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="49" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source2" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="51" To="52" Label="Source1" />
      <Edge From="52" To="53" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>